PsychoPy2experiment version="2026.1.1"
Settings
  Audio lib = ptb
  End Message = Thank you for your participation.
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = deeppsych_exp
  keyboardBackend = PsychToolbox
  runMode = 0
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Routines
  Routine routine_1
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    KeyboardComponent routine_1_key_resp
      allowedKeys = 'f','j'
      forceEndRoutine = True
      startVal [time (s)] = 0
      stopVal [duration (s)] = -0.001
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  Routine routine_2
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    KeyboardComponent routine_2_key_resp
      allowedKeys = 'f','j'
      forceEndRoutine = True
      startVal [time (s)] = 0
      stopVal [duration (s)] = -0.001
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  Routine routine_3
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    KeyboardComponent routine_3_key_resp
      allowedKeys = 'f','j'
      forceEndRoutine = True
      startVal [time (s)] = 0
      stopVal [duration (s)] = -0.001
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Flow
  Routine routine_1
  Routine routine_2
  Routine routine_3
